PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  End Message = Спасибо за участие!
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['circle__002F39.png', 'circle__3D1E28.png', 'circle__3E1E1F.png', 'circle__152A41.png', 'circle__32213A.png', 'circle__063126.png', 'circle__232642.png', 'circle__322807.png', 'circle-large-donut__002F39.png', 'circle-large-donut__3D1E28.png', 'circle-large-donut__3E1E1F.png', 'circle-large-donut__152A41.png', 'circle-large-donut__32213A.png', 'circle-large-donut__063126.png', 'circle-large-donut__232642.png', 'circle-large-donut__322807.png', 'circle-with-circle-cutout__002F39.png', 'circle-with-circle-cutout__3D1E28.png', 'circle-with-circle-cutout__3E1E1F.png', 'circle-with-circle-cutout__152A41.png', 'circle-with-circle-cutout__32213A.png', 'circle-with-circle-cutout__063126.png', 'circle-with-circle-cutout__232642.png', 'circle-with-circle-cutout__322807.png', 'diamond-thin-plus-shape__002F39.png', 'diamond-thin-plus-shape__3D1E28.png', 'diamond-thin-plus-shape__3E1E1F.png', 'diamond-thin-plus-shape__152A41.png', 'diamond-thin-plus-shape__32213A.png', 'diamond-thin-plus-shape__063126.png', 'diamond-thin-plus-shape__232642.png', 'diamond-thin-plus-shape__322807.png', 'rectangle-third-plus-shape__002F39.png', 'rectangle-third-plus-shape__3D1E28.png', 'rectangle-third-plus-shape__3E1E1F.png', 'rectangle-third-plus-shape__152A41.png', 'rectangle-third-plus-shape__32213A.png', 'rectangle-third-plus-shape__063126.png', 'rectangle-third-plus-shape__232642.png', 'rectangle-third-plus-shape__322807.png', 'shape-3-sided-triangle__002F39.png', 'shape-3-sided-triangle__3D1E28.png', 'shape-3-sided-triangle__3E1E1F.png', 'shape-3-sided-triangle__152A41.png', 'shape-3-sided-triangle__32213A.png', 'shape-3-sided-triangle__063126.png', 'shape-3-sided-triangle__232642.png', 'shape-3-sided-triangle__322807.png', 'shape-5-sided-pentagon__002F39.png', 'shape-5-sided-pentagon__3D1E28.png', 'shape-5-sided-pentagon__3E1E1F.png', 'shape-5-sided-pentagon__152A41.png', 'shape-5-sided-pentagon__32213A.png', 'shape-5-sided-pentagon__063126.png', 'shape-5-sided-pentagon__232642.png', 'shape-5-sided-pentagon__322807.png', 'shape-8-sided-octagon__002F39.png', 'shape-8-sided-octagon__3D1E28.png', 'shape-8-sided-octagon__3E1E1F.png', 'shape-8-sided-octagon__152A41.png', 'shape-8-sided-octagon__32213A.png', 'shape-8-sided-octagon__063126.png', 'shape-8-sided-octagon__232642.png', 'shape-8-sided-octagon__322807.png', 'shape-heart__002F39.png', 'shape-heart__3D1E28.png', 'shape-heart__3E1E1F.png', 'shape-heart__152A41.png', 'shape-heart__32213A.png', 'shape-heart__063126.png', 'shape-heart__232642.png', 'shape-heart__322807.png', 'square-large__002F39.png', 'square-large__3D1E28.png', 'square-large__3E1E1F.png', 'square-large__152A41.png', 'square-large__32213A.png', 'square-large__063126.png', 'square-large__232642.png', 'square-large__322807.png', 'images_list.txt', 'colored_file_list.csv']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = confidence_exp_with_pngs
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine encoding
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        import random

        # --- SETTINGS ---
        # Primary manifest (one filename per line). Place it in the experiment root.
        MANIFEST_TXT = "images_list.txt"

        # Optional fallback CSV (first column header "filename"). If MANIFEST_TXT is missing,
        # the code tries this name. You can rename it if needed.
        FALLBACK_CSV = "colored_file_list.csv"

        def _load_from_txt(path):
            """Load non-empty lines, strip whitespace."""
            with open(path, "r", encoding="utf-8") as f:
                lines = [ln.strip() for ln in f.readlines()]
            return [ln for ln in lines if ln and (ln.lower().endswith(".png"))]

        def _load_from_csv(path):
            """Very simple CSV reader: first column is the filename."""
            rows = []
            with open(path, "r", encoding="utf-8") as f:
                for i, ln in enumerate(f):
                    ln = ln.strip()
                    if not ln:
                        continue
                    # split by comma; take first column
                    parts = ln.split(",")
                    if i == 0 and parts[0].lower() == "filename":
                        continue  # skip header
                    name = parts[0].strip()
                    if name.lower().endswith(".png"):
                        rows.append(name)
            return rows

        def load_filenames():
            # Try TXT first
            try:
                files = _load_from_txt(MANIFEST_TXT)
                if files:
                    return files
            except Exception:
                pass
            # Try CSV fallback
            try:
                files = _load_from_csv(FALLBACK_CSV)
                if files:
                    return files
            except Exception:
                pass
            # If both failed:
            raise RuntimeError(
                "No image list found. Create 'images_list.txt' (one PNG per line) in the experiment folder "
                "or place 'colored_file_list.csv' with a 'filename' header."
            )

        # Load once per session
        _catalog_images = load_filenames()
        if len(_catalog_images) < 5:
            raise RuntimeError("Need at least 5 PNG filenames in your list.")

        def pick_five_images():
            """Return 5 distinct filenames (no pair repeats on the screen)."""
            # Because each filename encodes a unique (shape,color) pair,
            # sampling without replacement ensures no identical pair repeats.
            return random.sample(_catalog_images, 5)

        # --- Retrieval state (persist across routines) ---
        target_idx = None
        target_image = None
        foil_image = None

        # Display control for retrieval routine
        image_left_file  = None
        image_right_file = None
        image_center_file = None

        left_opacity = 0.0
        right_opacity = 0.0
        center_opacity = 0.0

        # For scoring / logging
        correct_side = None           # 'left' or 'right' for 2-AFC cases
        center_is_target = None       # True/False for 1-AFC case

        def pick_foil(not_in_list):
            candidates = [f for f in _catalog_images if f not in not_in_list]
            if not candidates:
                raise RuntimeError("No available foil images (catalog too small vs. shown set).")
            return random.choice(candidates)
      Begin JS Experiment:
        /*
        // --- SETTINGS ---
        const MANIFEST_TXT = "images_list.txt";       // one PNG per line
        const FALLBACK_CSV = "colored_file_list.csv"; // CSV with first col "filename"

        // --- Small helpers (no external imports) ---
        function _bomStrip(s) {
          // remove UTF-8 BOM if present
          return (s && s.charCodeAt(0) === 0xFEFF) ? s.slice(1) : s;
        }

        function _isPng(name) {
          return typeof name === "string" && name.trim().toLowerCase().endsWith(".png");
        }

        // Fisher–Yates in-place shuffle clone, returns new array
        function _shuffledCopy(arr) {
          const a = arr.slice();
          for (let i = a.length - 1; i > 0; i--) {
            // const j = (Math.random() * (i + 1)) | 0;
            const j = util.randint(0, i + 1);
            const tmp = a[i]; a[i] = a[j]; a[j] = tmp;
          }
          return a;
        }

        function _sampleN(arr, n) {
          if (n <= 0) return [];
          if (n >= arr.length) return arr.slice();
          return _shuffledCopy(arr).slice(0, n);
        }

        function _choice(arr) {
          if (!arr || arr.length === 0) throw new Error("Cannot choose from empty array.");
          //const idx = (Math.random() * arr.length) | 0;
          const idx = util.randint(0, arr.length);
          return arr[idx];
        }

        // --- Resource loading (PsychoJS server manager) ---
        async function _readTextResource(filename) {
          // Make sure file is listed in “Additional Resources”
          const res = await psychoJS.serverManager.getResource(filename);
          // res is a Blob in modern PsychoJS; use .text() to read it
          if (!res) throw new Error(`Resource not found: ${filename}`);
          const txt = await res.text();
          return _bomStrip(txt);
        }

        function _parseTxtToPngs(text) {
          return text
            .split(/\r?\n/)
            .map(ln => ln.trim())
            .filter(ln => ln && _isPng(ln));
        }

        function _parseCsvFirstColumnToPngs(text) {
          const lines = text.split(/\r?\n/);
          const out = [];
          for (let i = 0; i < lines.length; i++) {
            const raw = lines[i].trim();
            if (!raw) continue;
            const parts = raw.split(",");
            if (i === 0 && parts[0] && parts[0].trim().toLowerCase() === "filename") continue;
            const name = (parts[0] || "").trim();
            if (_isPng(name)) out.push(name);
          }
          return out;
        }

        // --- Public API (mirrors your Python) ---
        let _catalog_images = []; // filled by initImageCatalog()
        /*
        async function load_filenames() {
          // Try TXT first
          try {
            const txt = await _readTextResource(MANIFEST_TXT);
            const files = _parseTxtToPngs(txt);
            if (files && files.length > 0) return files;
          } catch (e) {
            // ignore and try CSV
          }

          // Try CSV fallback
          try {
            const csv = await _readTextResource(FALLBACK_CSV);
            const files = _parseCsvFirstColumnToPngs(csv);
            if (files && files.length > 0) return files;
          } catch (e) {
            // ignore; will throw below
          }

          throw new Error(
            "No image list found. Create 'images_list.txt' (one PNG per line) in the experiment folder " +
            "or place 'colored_file_list.csv' with a 'filename' header."
          );
        }
        */
        /*
        async function load_filenames() {
          try {
            const txt = await _readTextResource(MANIFEST_TXT);
            const files = _parseTxtToPngs(txt);
            console.log(`[manifest] ${MANIFEST_TXT} parsed ${files.length} png(s)`);
            if (files && files.length > 0) return files;
          } catch (e) {
            console.warn(`Could not read ${MANIFEST_TXT}:`, e);
          }

          try {
            const csv = await _readTextResource(FALLBACK_CSV);
            const files = _parseCsvFirstColumnToPngs(csv);
            console.log(`[manifest] ${FALLBACK_CSV} parsed ${files.length} png(s)`);
            if (files && files.length > 0) return files;
            console.warn(`${FALLBACK_CSV} loaded but no .pngs were parsed (check delimiter/header).`);
          } catch (e) {
            console.warn(`Could not read ${FALLBACK_CSV}:`, e);
          }

          throw new Error(
            "No image list found. Create 'images_list.txt' (one PNG per line) in the experiment folder " +
            "or place 'colored_file_list.csv' with a 'filename' header."
          );
        }

        // Call this ONCE at startup (e.g., Begin Experiment): await initImageCatalog();
        async function initImageCatalog() {
          _catalog_images = await load_filenames();
          if (_catalog_images.length < 5) {
            throw new Error("Need at least 5 PNG filenames in your list.");
          }
        }

        function pick_five_images() {
          // Because filenames encode unique (shape,color) pairs,
          // sampling without replacement ensures no pair repeats.
          return _sampleN(_catalog_images, 5);
        }

        function pick_foil(not_in_list) {
          const blacklist = new Set(not_in_list || []);
          const candidates = _catalog_images.filter(f => !blacklist.has(f));
          if (candidates.length === 0) {
            throw new Error("No available foil images (catalog too small vs. shown set).");
          }
          return _choice(candidates);
        }

        // --- Retrieval state (persist across routines), mirroring your Python ---
        let target_idx = null;
        let target_image = null;
        let foil_image = null;

        // Display control for retrieval routine
        let image_left_file = null;
        let image_right_file = null;
        let image_center_file = null;

        let left_opacity = 0.0;
        let right_opacity = 0.0;
        let center_opacity = 0.0;

        // For scoring / logging
        let correct_side = null;      // 'left' or 'right' for 2-AFC
        let center_is_target = null;  // true/false for 1-AFC

        // make the helpers globally visible to later routines
        Object.assign(window, {
          pick_five_images,
          pick_foil,
          initImageCatalog
        });

        // load the catalog once before any trial starts
        await initImageCatalog();
        */
        // --- SETTINGS ---
        const MANIFEST_TXT = "images_list.txt";       // one PNG per line
        const FALLBACK_CSV = "colored_file_list.csv"; // CSV with first col "filename"

        // --- Small helpers (no external imports) ---
        function _bomStrip(s) {
          // remove UTF-8 BOM if present
          return (s && s.charCodeAt(0) === 0xFEFF) ? s.slice(1) : s;
        }

        function _isPng(name) {
          return typeof name === "string" && name.trim().toLowerCase().endsWith(".png");
        }

        // Fisher–Yates in-place shuffle clone, returns new array
        function _shuffledCopy(arr) {
          const a = arr.slice();
          for (let i = a.length - 1; i > 0; i--) {
            const j = util.randint(0, i + 1);
            const tmp = a[i]; a[i] = a[j]; a[j] = tmp;
          }
          return a;
        }

        function _sampleN(arr, n) {
          if (n <= 0) return [];
          if (n >= arr.length) return arr.slice();
          return _shuffledCopy(arr).slice(0, n);
        }

        function _choice(arr) {
          if (!arr || arr.length === 0) throw new Error("Cannot choose from empty array.");
          const idx = util.randint(0, arr.length);
          return arr[idx];
        }

        // --- Resource loading (robust across PsychoJS versions/shapes) ---
        async function _readTextResource(filename) {
          // Make sure the file is listed in “Additional resources”
          const res = await psychoJS.serverManager.getResource(filename);
          if (!res) throw new Error(`Resource not found: ${filename}`);

          // Already a plain string?
          if (typeof res === "string") return _bomStrip(res);

          // Blob/Response-like with .text()
          if (res && typeof res.text === "function") {
            const txt = await res.text();
            return _bomStrip(txt);
          }

          // Wrapper object { data: ... }
          if (res && res.data !== undefined) {
            const d = res.data;
            if (typeof d === "string") return _bomStrip(d);
            if (d && typeof d.text === "function") {
              const txt = await d.text();
              return _bomStrip(txt);
            }
            if (d instanceof ArrayBuffer || d instanceof Uint8Array) {
              const buf = d instanceof Uint8Array ? d : new Uint8Array(d);
              const txt = new TextDecoder("utf-8").decode(buf);
              return _bomStrip(txt);
            }
          }

          // Raw buffers sometimes come directly
          if (res instanceof ArrayBuffer || res instanceof Uint8Array) {
            const buf = res instanceof Uint8Array ? res : new Uint8Array(res);
            const txt = new TextDecoder("utf-8").decode(buf);
            return _bomStrip(txt);
          }

          // Last resort
          const maybe = String(res);
          if (maybe && maybe.length) return _bomStrip(maybe);

          throw new Error(`Cannot read text from resource: ${filename} (unexpected shape)`);
        }

        function _parseTxtToPngs(text) {
          return text
            .split(/\r?\n/)
            .map(ln => ln.trim())
            .filter(ln => ln && _isPng(ln));
        }

        function _parseCsvFirstColumnToPngs(text) {
          const lines = text.split(/\r?\n/);
          const out = [];
          for (let i = 0; i < lines.length; i++) {
            const raw = lines[i].trim();
            if (!raw) continue;
            const parts = raw.split(","); // if your CSV is ; or \t, col0 still holds the whole string → endsWith(".png") still works
            if (i === 0 && parts[0] && parts[0].trim().toLowerCase() === "filename") continue;
            const name = (parts[0] || "").trim();
            if (_isPng(name)) out.push(name);
          }
          return out;
        }

        // Optional: fallback if both manifests fail — scan preloaded resources for .png files
        function _fromPreloadedPngs() {
          const out = [];
          const resMap = psychoJS.serverManager && psychoJS.serverManager.resources;
          if (!resMap) return out;

          // Map-like
          if (typeof resMap.forEach === "function") {
            resMap.forEach((_, key) => { if (_isPng(key)) out.push(key); });
            return out;
          }
          // Plain object
          if (typeof resMap === "object") {
            for (const key in resMap) {
              if (_isPng(key)) out.push(key);
            }
          }
          return out;
        }

        // --- Public API (mirrors your Python) ---
        let _catalog_images = []; // filled by initImageCatalog()

        async function load_filenames() {
          try {
            const txt = await _readTextResource(MANIFEST_TXT);
            const files = _parseTxtToPngs(txt);
            console.log(`[manifest] ${MANIFEST_TXT} → ${files.length} png(s)`);
            if (files.length > 0) return files;
          } catch (e) {
            console.warn(`Could not read ${MANIFEST_TXT}:`, e);
          }

          try {
            const csv = await _readTextResource(FALLBACK_CSV);
            const files = _parseCsvFirstColumnToPngs(csv);
            console.log(`[manifest] ${FALLBACK_CSV} → ${files.length} png(s)`);
            if (files.length > 0) return files;
            console.warn(`${FALLBACK_CSV} loaded but produced 0 pngs. Check delimiter/header.`);
          } catch (e) {
            console.warn(`Could not read ${FALLBACK_CSV}:`, e);
          }

          // Optional fallback: inspect preloaded resource names
          const fallback = _fromPreloadedPngs();
          if (fallback.length > 0) {
            console.warn(`Manifest missing; falling back to ${fallback.length} preloaded PNG(s).`);
            return fallback;
          }

          throw new Error(
            "No image list found. Create 'images_list.txt' (one PNG per line) in the experiment folder " +
            "or place 'colored_file_list.csv' with a 'filename' header."
          );
        }

        // Call this ONCE at startup (e.g., Begin Experiment): await initImageCatalog();
        async function initImageCatalog() {
          _catalog_images = await load_filenames();
          if (_catalog_images.length < 5) {
            throw new Error("Need at least 5 PNG filenames in your list.");
          }
        }

        function pick_five_images() {
          // Because filenames encode unique (shape,color) pairs,
          // sampling without replacement ensures no pair repeats.
          return _sampleN(_catalog_images, 5);
        }

        function pick_foil(not_in_list) {
          const blacklist = new Set(not_in_list || []);
          const candidates = _catalog_images.filter(f => !blacklist.has(f));
          if (candidates.length === 0) {
            throw new Error("No available foil images (catalog too small vs. shown set).");
          }
          return _choice(candidates);
        }

        // --- Retrieval state (persist across routines), mirroring your Python ---
        let target_idx = null;
        let target_image = null;
        let foil_image = null;

        // Display control for retrieval routine
        let image_left_file = null;
        let image_right_file = null;
        let image_center_file = null;

        let left_opacity = 0.0;
        let right_opacity = 0.0;
        let center_opacity = 0.0;

        // For scoring / logging
        let correct_side = null;      // 'left' or 'right' for 2-AFC
        let center_is_target = null;  // true/false for 1-AFC

        // ---- Expose & initialize (since this is in Begin Experiment inside experimentInit, top-level await is fine here) ----
        Object.assign(window, { pick_five_images, pick_foil, initImageCatalog });

        // load the catalog once before any trial starts
        await initImageCatalog();
      Begin JS Routine:
        // get 5 distinct filenames
        //current_images = pick_five_images();  // uses the global defined above
        current_images = window.pick_five_images();

        // choose a target index 0..4 (JS version of randrange)
        target_idx = Math.floor(Math.random() * 5);
        target_image = current_images[target_idx];

        // (Optional) log what was picked
        psychoJS.experiment.addData("enc_imgs", current_images.join(","));
        psychoJS.experiment.addData("enc_img1", current_images[0]);
        psychoJS.experiment.addData("enc_img2", current_images[1]);
        psychoJS.experiment.addData("enc_img3", current_images[2]);
        psychoJS.experiment.addData("enc_img4", current_images[3]);
        psychoJS.experiment.addData("enc_img5", current_images[4]);
        psychoJS.experiment.addData("target_image", target_image);
        psychoJS.experiment.addData("target_idx", target_idx);
      Begin Routine:
        current_images = pick_five_images()
        # Now use current_images[0..4] in your Image components

        # Pick one of the 5 as the target for this trial
        target_idx = random.randrange(5)          # 0..4
        target_image = current_images[target_idx]

        # (Optional) log what was picked
        thisExp.addData('enc_imgs', ','.join(current_images))
        thisExp.addData("enc_img1", current_images[0])
        thisExp.addData("enc_img2", current_images[1])
        thisExp.addData("enc_img3", current_images[2])
        thisExp.addData("enc_img4", current_images[3])
        thisExp.addData("enc_img5", current_images[4])
        thisExp.addData('target_image', target_image)
        thisExp.addData('target_idx', target_idx)
    ImageComponent image_1
      image [set every repeat] = $current_images[0]
      pos = (0, -0.4)
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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    ImageComponent image_2
      image [set every repeat] = $current_images[1]
      pos = (0, -0.2)
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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    ImageComponent image_3
      image [set every repeat] = $current_images[2]
      pos = (0, 0.0)
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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    ImageComponent image_4
      image [set every repeat] = $current_images[3]
      pos = (0, 0.2)
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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    ImageComponent image_5
      image [set every repeat] = $current_images[4]
      pos = (0, 0.4)
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
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  Routine fixation_cross
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    PolygonComponent fix_cross
      fillColor = white
      lineWidth = 0.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine maintenance
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    ImageComponent mask
      image = mask/Gaussian white noise.png
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine retrieval
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        /*# Ensure target_image and current_images are coming from the previous routine
        if not current_images or target_image is None:
        raise RuntimeError("Retrieval stage did not receive current_images/target_image from encoding.")

        # Pick a foil that was NOT shown in encoding
        foil_image = pick_foil(current_images)

        # Randomize side assignment
        if random.random() < 0.5:
        image_left_file  = target_image
        image_right_file = foil_image
        correct_side = "left"
        else:
        image_left_file  = foil_image
        image_right_file = target_image
        correct_side = "right"

        # (Optional) log
        thisExp.addData('foil_image', foil_image)
        thisExp.addData('correct_side', correct_side)*/

        /*
        if (((! current_images) || (target_image === null))) {
            throw new RuntimeError("Retrieval stage did not receive current_images/target_image from encoding.");
        }
        foil_image = pick_foil(current_images);
        image_left_file = null;
        image_right_file = null;
        image_center_file = null;
        left_opacity = 0.0;
        right_opacity = 0.0;
        center_opacity = 0.0;
        correct_side = null;
        center_is_target = null;
        t = (typeof task !== "undefined" && task != null ? String(task) : "").trim();
        if ((t === "matching_to_sample_2")) {
            if ((Math.random() < 0.5)) {
                image_left_file = target_image;
                image_right_file = foil_image;
                correct_side = "left";
            } else {
                image_left_file = foil_image;
                image_right_file = target_image;
                correct_side = "right";
            }
            left_opacity = 1.0;
            right_opacity = 1.0;
            center_opacity = 0.0;
        } else {
            if ((t === "non_matching_to_sample_2")) {
                if ((Math.random() < 0.5)) {
                    image_left_file = target_image;
                    image_right_file = foil_image;
                    correct_side = "right";
                } else {
                    image_left_file = foil_image;
                    image_right_file = target_image;
                    correct_side = "left";
                }
                left_opacity = 1.0;
                right_opacity = 1.0;
                center_opacity = 0.0;
            } else {
                if ((t === "matching_to_sample_1")) {
                    if ((Math.random() < 0.5)) {
                        image_center_file = target_image;
                        center_is_target = true;
                    } else {
                        image_center_file = foil_image;
                        center_is_target = false;
                    }
                    center_opacity = 1.0;
                    left_opacity = 0.0;
                    right_opacity = 0.0;
                } else {
                    throw new RuntimeError(`Unknown task value: ${t}`);
                }
            }
        }
        psychoJS.experiment.addData("retr_task", t);
        psychoJS.experiment.addData("retr_target", target_image);
        psychoJS.experiment.addData("retr_foil", foil_image);
        if (t.endsWith("_2")) {
            psychoJS.experiment.addData("correct_side", correct_side);
        }
        if (t.endsWith("_1")) {
            psychoJS.experiment.addData("center_is_target", center_is_target ? 1 : 0);
        }
        */

        // before the task branching
        foil_image = pick_foil(current_images);

        // SAFE DEFAULTS: never leave these null
        let image_left_file   = target_image;   // harmless fallback
        let image_right_file  = target_image;   // harmless fallback
        let image_center_file = target_image;   // harmless fallback

        let left_opacity = 0.0;
        let right_opacity = 0.0;
        let center_opacity = 0.0;
        let correct_side = null;
        let center_is_target = null;

        t = (typeof task !== "undefined" && task != null ? String(task) : "").trim();

        if (t === "matching_to_sample_2") {
          if (Math.random() < 0.5) {
            image_left_file = target_image; image_right_file = foil_image; correct_side = "left";
          } else {
            image_left_file = foil_image; image_right_file = target_image; correct_side = "right";
          }
          left_opacity = 1.0; right_opacity = 1.0; center_opacity = 0.0;
        }
        else if (t === "non_matching_to_sample_2") {
          if (Math.random() < 0.5) {
            image_left_file = target_image; image_right_file = foil_image; correct_side = "right";
          } else {
            image_left_file = foil_image; image_right_file = target_image; correct_side = "left";
          }
          left_opacity = 1.0; right_opacity = 1.0; center_opacity = 0.0;
        }
        else if (t === "matching_to_sample_1") {
          if (Math.random() < 0.5) {
            image_center_file = target_image; center_is_target = true;
          } else {
            image_center_file = foil_image;   center_is_target = false;
          }
          center_opacity = 1.0; left_opacity = 0.0; right_opacity = 0.0;
        }
        else {
          throw new RuntimeError(`Unknown task value: ${t}`);
        }

        psychoJS.experiment.addData('target_image', target_image);
        psychoJS.experiment.addData('foil_image', foil_image);
        psychoJS.experiment.addData('correct_side', correct_side);
        psychoJS.experiment.addData('center_is_target', center_is_target);
      Begin Routine:
        '''# Ensure target_image and current_images are coming from the previous routine
        if not current_images or target_image is None:
            raise RuntimeError("Retrieval stage did not receive current_images/target_image from encoding.")

        # Pick a foil that was NOT shown in encoding
        foil_image = pick_foil(current_images)

        # Randomize side assignment
        if random.random() < 0.5:
            image_left_file  = target_image
            image_right_file = foil_image
            correct_side = "left"
        else:
            image_left_file  = foil_image
            image_right_file = target_image
            correct_side = "right"

        # (Optional) log
        thisExp.addData('foil_image', foil_image)
        thisExp.addData('correct_side', correct_side)
        '''
        # Safety checks
        if not current_images or target_image is None:
            raise RuntimeError("Retrieval stage did not receive current_images/target_image from encoding.")

        # Build a foil that wasn't shown in encoding
        foil_image = pick_foil(current_images)

        # Reset display variables each trial
        image_left_file  = None
        image_right_file = None
        image_center_file = None
        left_opacity = right_opacity = center_opacity = 0.0
        correct_side = None
        center_is_target = None

        # ---- Branch by task type ----
        t = str(task).strip()  # from block_settings.xlsx column 'task'

        if t == "matching_to_sample_2":
            # 2-AFC: target vs foil; correct = where the target is
            if random.random() < 0.5:
                image_left_file  = target_image
                image_right_file = foil_image
                correct_side = "left"
            else:
                image_left_file  = foil_image
                image_right_file = target_image
                correct_side = "right"
            left_opacity = right_opacity = 1.0
            center_opacity = 0.0

        elif t == "non_matching_to_sample_2":
            # 2-AFC: target vs foil; correct = where the FOIL is (the one NOT shown)
            if random.random() < 0.5:
                image_left_file  = target_image
                image_right_file = foil_image
                correct_side = "right"   # foil on right is correct
            else:
                image_left_file  = foil_image
                image_right_file = target_image
                correct_side = "left"    # foil on left is correct
            left_opacity = right_opacity = 1.0
            center_opacity = 0.0

        elif t == "matching_to_sample_1":
            # 1-AFC: show a single image (target or foil) in the center
            # key '1' = yes (was shown), '0' = no (wasn't shown)
            if random.random() < 0.5:
                image_center_file = target_image
                center_is_target = True
            else:
                image_center_file = foil_image
                center_is_target = False
            center_opacity = 1.0
            left_opacity = right_opacity = 0.0

        else:
            raise RuntimeError(f"Unknown task value: {t}")

        # (Optional) logging
        thisExp.addData('retr_task', t)
        thisExp.addData('retr_target', target_image)
        thisExp.addData('retr_foil', foil_image)
        if t.endswith('_2'): thisExp.addData('correct_side', correct_side)
        if t.endswith('_1'): thisExp.addData('center_is_target', int(bool(center_is_target)))

        thisExp.addData('target_image', target_image)
        thisExp.addData('foil_image', foil_image)
        thisExp.addData('correct_side', correct_side)
      End JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        /*
        resp_key = retrieval_answer.keys  # '1' or '0' or None
        chosen_side = 'left' if resp_key == '1' else ('right' if resp_key == '0' else 'none')
        is_correct = int(chosen_side == correct_side)

        # Log
        thisExp.addData('resp_key', resp_key)
        thisExp.addData('chosen_side', chosen_side)
        thisExp.addData('is_correct', is_correct)
        */

        resp_key = retrieval_answer.keys;
        chosen_side = null;
        is_correct = null;
        center_is_target = null;
        t = (typeof task !== "undefined" && task != null ? String(task) : "").trim();
        if (_pj.in_es6(t, ["matching_to_sample_2", "non_matching_to_sample_2"])) {
            if ((resp_key === "1")) {
                chosen_side = "left";
            } else {
                if ((resp_key === "0")) {
                    chosen_side = "right";
                } else {
                    chosen_side = "none";
                }
            }
            //is_correct = Number.parseInt((chosen_side === correct_side));
            is_correct = (chosen_side !== "none" && correct_side) ? (chosen_side === correct_side ? 1 : 0) : 0;
        } else {
            if ((t === "matching_to_sample_1")) {
                if (_pj.in_es6(resp_key, ["1", "0"])) {
                    let said_yes = (resp_key === "1");
                    is_correct = Number(Boolean(center_is_target) === said_yes);
                } else {
                    is_correct = 0;
                }
            }
        }

        psychoJS.experiment.addData("chosen_side", (chosen_side ? chosen_side : ""));
        psychoJS.experiment.addData("is_correct", is_correct);
      End Routine:
        # Suppose your Keyboard component is named 'retrieval_answer'
        # Map '1' -> left, '0' -> right
        '''
        resp_key = retrieval_answer.keys  # '1' or '0' or None
        chosen_side = 'left' if resp_key == '1' else ('right' if resp_key == '0' else 'none')
        is_correct = int(chosen_side == correct_side)

        # Log
        thisExp.addData('resp_key', resp_key)
        thisExp.addData('chosen_side', chosen_side)
        thisExp.addData('is_correct', is_correct)

        '''
        resp_key = retrieval_answer.keys  # '1' or '0' (or None if no response)
        chosen_side = None
        is_correct = None

        t = str(task).strip()

        if t in ("matching_to_sample_2", "non_matching_to_sample_2"):
            # Map '1' -> left, '0' -> right
            if resp_key == '1':
                chosen_side = 'left'
            elif resp_key == '0':
                chosen_side = 'right'
            else:
                chosen_side = 'none'
            is_correct = int(chosen_side == correct_side)

        elif t == "matching_to_sample_1":
            # Map '1' -> yes (was shown), '0' -> no (wasn't shown)
            if resp_key in ('1','0'):
                said_yes = (resp_key == '1')
                is_correct = int(bool(center_is_target) == said_yes)
            else:
                is_correct = 0  # or None if you prefer

        # (Optional) add detailed logs

        thisExp.addData('chosen_side', chosen_side if chosen_side else '')
        thisExp.addData('is_correct', is_correct)
    ImageComponent image_left
      image [set every repeat] = $image_left_file
      opacity [set every repeat] = left_opacity
      pos = (-0.2, 0)
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
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    ImageComponent image_right
      image [set every repeat] = $image_right_file
      opacity [set every repeat] = right_opacity
      pos = (0.2, 0)
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
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    ImageComponent image_center
      image [set every repeat] = $image_center_file
      opacity [set every repeat] = center_opacity
      size = (0.18, 0.18)
      startVal [time (s)] = 0.0
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    KeyboardComponent retrieval_answer
      allowedKeys = '1', '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine confidence
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    TextComponent confidence_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Насколько вы уверены?

        1 - не уверен
        2 - скорее не уверен
        3 - скорее уверен
        4 - уверен
    KeyboardComponent confidence_answer
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_instruction
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    KeyboardComponent start_block
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruction_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Инструкция к этапу.

        Нажмите ПРОБЕЛ, чтобы продолжить.
  Routine welcome_instruction
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    TextComponent instruction_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Здравствуйте, вам предстоит пройти эксперимент... Он будет состоять из... этапов. Вы сможете делать паузы между этапами, но, пожалуйста, не отвлекайтесь во время прохождения этапа.

        Нажмите ПРОБЕЛ, чтобы перейти к инструкции для первого этапа.
    KeyboardComponent go_to_blocks
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Спасибо за участие в эксперименте!

        Подождите несколько секунд, данные сохраняются.
    KeyboardComponent end_experiment
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent save_exp_online
      Code Type = JS
      Before JS Experiment:
        function replText(text, el, repl = '_') {
            let te = String(text);
            if (te.includes(el)) {
                return te.replace(new RegExp(el,'g'), repl);
            } else {
                return te;
            }
        }

        function makeString(arr, delim = ',', repl = '_') {

            let attrSet = new Set();
            for (let i = 0; i < arr.length; i++) {
                for(let k of Object.keys(arr[i])) {
                    attrSet.add(k);
                }
            }
            let attr = [...attrSet];

            attr.sort();

            let lineList = [attr.join(delim) + '\n'];

            for(let i = 0; i < arr.length; i++) {
                for(let j = 0; j < attr.length; j++){
                    if(!Object.hasOwn(arr[i], attr[j])){
                        arr[i][attr[j]] = '';
                    }
                }
            }

            let replFun = (i) => replText(replText(i, delim, repl), '\n', repl + repl);

            for (let i = 0; i < arr.length; ++i) {
                for(let j = 0; j < attr.length; j++){
                    if(!Object.hasOwn(arr[i], attr[j])){
                        arr[i][attr[j]] = '';
                    }
                }
              let dataList = attr.map((k) => replFun(arr[i][k]));
              let dataStr = dataList.join(delim);
              lineList.push(dataStr + '\n');
            }

            return lineList.join('');

        };
      Begin JS Experiment:
        psychoJS._saveResults = 0;
      Begin JS Routine:
        // experimentID is what you change

        psychoJS._saveResults = 0;
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';
        let dataObj = psychoJS._experiment._trialsData;

        let data = makeString(dataObj);

        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'PKSoCOjNep0R',
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            console.log(data);
            quitPsychoJS();
        })
  Routine pause
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Вы можете сделать паузу.

        Нажмите ПРОБЕЛ, чтобы перейти к инструкции к следующему этапу.
    KeyboardComponent pause_next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    KeyboardComponent go_to_trials
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruction_text_block
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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Flow
  Routine welcome_instruction
  LoopInitiator condition_block loopType="TrialHandler"
    conditionsFile = block_settings.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'duration': 1, 'task': 'matching_to_sample_2', 'instruction_text': 'Выберите из двух вариантов фигуру, которая БЫЛА показана ранее. \n\n1 – ЛЕВАЯ фигура БЫЛА показана ранее.\n0 – ПРАВАЯ фигура БЫЛА показана ранее.\n\nНажмите ПРОБЕЛ, чтобы перейти к заданиям.'},
      {'duration': 1, 'task': 'non_matching_to_sample_2', 'instruction_text': 'Выберите из двух вариантов фигуру, которая НЕ БЫЛА показана ранее. \n\n1 – ЛЕВАЯ фигура НЕ БЫЛА показана ранее.\n0 – ПРАВАЯ фигура НЕ БЫЛА показана ранее.\n\nНажмите ПРОБЕЛ, чтобы перейти к заданиям.'},
      {'duration': 1, 'task': 'matching_to_sample_1', 'instruction_text': 'В задании вам будет показана одна фигура. Выберите, была ли она показана ранее. \n\n1 – да, была.\n0 – нет, не была.\n\nНажмите ПРОБЕЛ, чтобы перейти к заданиям.'},
      {'duration': 0.5, 'task': 'matching_to_sample_2', 'instruction_text': 'Выберите из двух вариантов фигуру, которая БЫЛА показана ранее. \n\n1 – ЛЕВАЯ фигура БЫЛА показана ранее.\n0 – ПРАВАЯ фигура БЫЛА показана ранее.\n\nНажмите ПРОБЕЛ, чтобы перейти к заданиям.'},
      {'duration': 0.5, 'task': 'non_matching_to_sample_2', 'instruction_text': 'Выберите из двух вариантов фигуру, которая НЕ БЫЛА показана ранее. \n\n1 – ЛЕВАЯ фигура НЕ БЫЛА показана ранее.\n0 – ПРАВАЯ фигура НЕ БЫЛА показана ранее.\n\nНажмите ПРОБЕЛ, чтобы перейти к заданиям.'}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
    Routine instruction
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 3
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      conditions:
        [OrderedDict([('filename', 'circle-large-donut__002F39.png')]),
        OrderedDict([('filename', 'circle-large-donut__063126.png')]),
        OrderedDict([('filename', 'circle-large-donut__152A41.png')]),
        OrderedDict([('filename', 'circle-large-donut__232642.png')]),
        OrderedDict([('filename', 'circle-large-donut__32213A.png')]),
        OrderedDict([('filename', 'circle-large-donut__322807.png')]),
        OrderedDict([('filename', 'circle-large-donut__3D1E28.png')]),
        OrderedDict([('filename', 'circle-large-donut__3E1E1F.png')]),
        OrderedDict([('filename', 'circle-with-circle-cutout__002F39.png')]),
        OrderedDict([('filename', 'circle-with-circle-cutout__063126.png')]),
        OrderedDict([('filename', 'circle-with-circle-cutout__152A41.png')]),
        OrderedDict([('filename', 'circle-with-circle-cutout__232642.png')]),
        OrderedDict([('filename', 'circle-with-circle-cutout__32213A.png')]),
        OrderedDict([('filename', 'circle-with-circle-cutout__322807.png')]),
        OrderedDict([('filename', 'circle-with-circle-cutout__3D1E28.png')]),
        OrderedDict([('filename', 'circle-with-circle-cutout__3E1E1F.png')]),
        OrderedDict([('filename', 'circle__002F39.png')]),
        OrderedDict([('filename', 'circle__063126.png')]),
        OrderedDict([('filename', 'circle__152A41.png')]),
        OrderedDict([('filename', 'circle__232642.png')]),
        OrderedDict([('filename', 'circle__32213A.png')]),
        OrderedDict([('filename', 'circle__322807.png')]),
        OrderedDict([('filename', 'circle__3D1E28.png')]),
        OrderedDict([('filename', 'circle__3E1E1F.png')]),
        OrderedDict([('filename', 'diamond-thin-plus-shape__002F39.png')])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
      Routine fixation_cross
      Routine encoding
      Routine maintenance
      Routine retrieval
      Routine confidence
    LoopTerminator trials
    Routine pause
  LoopTerminator condition_block
  Routine end
